waitForUser("Choose a directory to save your projected GFP images");

tmp = getDirectory("Choose a directory");
myDir = tmp+"ZMax_GFP"+File.separator;
File.makeDirectory(myDir);
	if (!File.exists(myDir)) {
      exit("Unable to create directory");
	}

//print("");
//print(myDir);

waitForUser("Choose a directory containing the image stacks to be processed.\n \nThe directory should contain only image stacks to be processed.");

dir=getDirectory("Choose a directory");
print(dir);

list=getFileList(dir);
Array.print(list);
number=0;
 
for (i=0; i<list.length; i++){	
	number++;
	//IJ.log(number);
	nextStack=list[i];
	open(dir+nextStack);
	run("Z Project...", "start=1 stop=3 projection=[Max Intensity]");
	title=getTitle();
	saveAs("Tiff", myDir+title);
	close();
	selectWindow(nextStack);
	close();
}

//run("Images to Stack");