//CropThresh.txt
//To analyze epdz recruitment in TIRF
// ** It would be nice to add a cell cycle measurement
  // ** Maybe daughter cell size?


//FUNCTIONS
function get_cell_measurements(num_frames){
  //num_frames = integer, number of frames in the stack

  for (k = 1; k <= num_frames; k++){
      setSlice(k);
      List.setMeasurements;
      int_den = List.getValue("IntDen");
      mean = List.getValue("Mean");
      area = List.getValue("Area");
      setResult(image + " Area", k-1, area);
      setResult(image + " Mean", k-1, mean);
      setResult(image + " IntDen", k-1, int_den);
  }

}

function get_bkgrd_measurements(){

  List.setMeasurements;
  int_den = List.getValue("IntDen");
  mean = List.getValue("Mean");
  area = List.getValue("Area");
  setResult("Bkgrnd Area", 0, area);
  setResult("Bkgrnd Mean", 0, mean);
  setResult("Bkgrnd IntDen", 0, int_den);

}

function get_all_measurements(image, dir, cell_num){
  //image = string, what image are you measuring
  //dir = string, where to save the data
  //cell_num = integer, what cell being processed

  selectWindow(image);
  num_frames = nSlices();
  setSlice(1);
  roiManager("select", 0);
  get_cell_measurements(num_frames);

  selectWindow(image);
  setSlice(1);
  roiManager("select", 1);
  get_bkgrd_measurements();

  updateResults();
  saveAs("measurements", dir + image + "_" + cell_num +
      "_intensities.csv");

  if(isOpen("Results")){
    selectWindow("Results"); //this may need to be what it was saved as
    run("Close");
  }

}

function closeCroppedImages() {
  n = nImages;
  list = newArray(n);
  setBatchMode(true);
  for (i=1; i<=n; i++) {
                selectImage(i);
                list[i-1] = getImageID;
  }
  setBatchMode(false);

  for (j = 0; j < n; j++) {
       curr_id = list[j];
       selectImage(curr_id);
       ht = getHeight();
       if (ht < 512){
           close();
      }
  } 
}


function closeAllImages()	{
  //Closes all images
 	while (nImages>0) {
		selectImage(nImages);
		close();
	}
}

//Prints the array in a human-readable form
function printArray(array) {
    string="";
    for (i=0; i<lengthOf(array); i++) {
        if (i==0) {
            string=string+array[i];
        } else {
            string=string+", "+array[i];
        }
    }
    print(string);
}

//START PROCESSING

waitForUser("Choose the current directory");
dir=getDirectory("Choose a Directory");
IJ.log("dir: " + dir);

num_expts = getFileList(dir);
print("num_expts.length: " + num_expts.length);
printArray(num_expts);

for (i = 0; i < num_expts.length; i++) {
    curr_expt = num_expts[i];
    print("curr_expt: " + curr_expt);
    data = getFileList(dir + curr_expt);

    count = 0;
    for (m = 0; m < data.length; m++){
        curr_data = data[m];
        print("curr_data: ", curr_data);
        if (startsWith(curr_data, "Current")) {
            nom_folder = data[m];
            nom_files = getFileList(dir + curr_expt + nom_folder);
            nom = nom_files[0];
            count++;
            print("Worked!");
        } else if (startsWith(curr_data, "Dual")) {
            dual = curr_expt + data[m];
            count++;
        } else if (startsWith(curr_data, "Post")) {
            post = curr_expt + data[m];
            count++;
        } else if (startsWith(curr_data, "Pre")) {
            pre = curr_expt + data[m];
            count++;
        }
    }

    if (count == 4) {
        images = newArray("Current", "Dual", "Post", "Pre");
    } else {
        images = newArray("Dual", "Post", "Pre");
    }

    count = 0;

    procDir = dir + curr_expt + "processedImages/";
    File.makeDirectory(procDir);
    IJ.log("procDir: " + procDir);

    //run("Image Sequence...", "open=["+nom+"] sort");
    if (images[0] == "Current") {
        open(dir + curr_expt + nom_folder + nom);
        rename("Nom");
        run("Duplicate...", "title=Duplicate_Nom");
    }

    run("Image Sequence...", "open=["+dir + dual+"] starting=2 increment=2 sort");
    rename("GFP");
    gfp_frames = nSlices();
    run("Duplicate...", "title=Duplicate_GFP duplicate range=1-["+gfp_frames+"]");
    setSlice(1);
    run("Duplicate...", "title=temp");

    run("Image Sequence...", "open=["+dir + dual+"] starting=1 increment=2 sort");
    rename("RFP_Dual");
    run("Duplicate...", "title=Duplicate_RFP_Dual duplicate range=1-["+gfp_frames+"]");

    run("Image Sequence...", "open=["+dir + post+"] sort");
    rename("Post");
    post_frames = nSlices();
    run("Duplicate...", "title=Duplicate_Post duplicate range=1-["+post_frames+"]");

    run("Image Sequence...", "open=["+dir + pre+"] sort");
    rename("Pre");
    pre_frames = nSlices();
    run("Duplicate...", "title=Duplicate_Pre duplicate range=1-["+pre_frames+"]");

    //waitForUser("Debugging");

    // CROP CELLS

    cropCells = getBoolean("Would you like to crop any fields in this directory?");

    if (cropCells) {

    		setBatchMode(true);

    		selectWindow("Duplicate_GFP");
    		name=getTitle();
    		selectWindow("temp");
    		run("8-bit");
    		rename(name+"_thumb.tif");
    		setBatchMode(false);
    		setLocation(50, 50);

    		selectWindow("Duplicate_GFP");
    		//run("Enhance Contrast", "saturated=0.5");
    		cropThis = getBoolean("Would you like to crop any cells in this stack?");

    		if (cropThis)	{
    			numCrops=0;

    			do	{
    				selectWindow("Duplicate_GFP");
    				if (numCrops==0)	{
    					makeRectangle(1, 1, 75, 75);
    				}
    				selectWindow("Duplicate_GFP");
    				waitForUser("Move or resize the ROI and click OK.");
    				selectWindow(name+"_thumb.tif");
    				run("Restore Selection");
    				numCrops++;
    				cellDir=procDir + "/Cell_" + numCrops + File.separator;
    				File.makeDirectory(cellDir);
    				run("Colors...", "foreground=white background=white selection=yellow");
    				run("Draw");
    				getSelectionBounds(x, y, width, height);
    				xText=x+2;
    				yText=y+15;
    				setColor(255,255,255);
    				setFont("SansSerif" , 12, "antialiased");
    				drawString(numCrops, xText, yText);
    				saveAs("Tiff", dir + curr_expt + name + "_thumb.tif");

    				//FOR EACH CHANNEL THAT YOU WANT TO CROP, REPEAT THE BLOCK OF CODE CALLED "CHANNEL CROP"
    					//ALTER SELECTWINDOW() COMMAND AND NAME VARIABLES AS NEEDED

    				//BEGIN "CHANNEL CROP"
    				selectWindow("Duplicate_GFP");
    				run("Restore Selection");
    				run("Duplicate...", "title=temp duplicate");
    				saveAs("Tiff", cellDir+"GFP_crop"+".tif");

    				selectWindow("Duplicate_RFP_Dual");
    				run("Restore Selection");
    				run("Duplicate...", "title=temp duplicate");
            //waitForUser("Debugging");
    				if (numCrops <= 9)
    					saveAs("Tiff", cellDir+"RFP_Dual_crop0"+numCrops+".tif");
    				else
    					saveAs("Tiff", cellDir+"RFP_Dual_crop"+numCrops+".tif");

    				selectWindow("Duplicate_Pre");
    				run("Restore Selection");
    				run("Duplicate...", "title=temp duplicate");
            //waitForUser("Debugging");
    				saveAs("Tiff", cellDir+"Pre_crop"+".tif");

            selectWindow("Duplicate_Post");
    				run("Restore Selection");
    				run("Duplicate...", "title=temp duplicate");
            //waitForUser("Debugging");
    				saveAs("Tiff", cellDir+"Post_crop"+".tif");
            if (images[0] == "Current") {
                selectWindow("Duplicate_Nom");
                run("Duplicate...", "title=Nom_temp duplicate");
                run("Restore Selection");
                run("Duplicate...", "title=temp duplicate");
                run("Duplicate...", "title=temp2 duplicate");
                //waitForUser("Debugging");
                saveAs("Tiff", cellDir+"Nom_crop"+".tif");
                close();

    				    selectWindow("temp");
    				    run("Find Edges", "stack");
    				    run("Smooth", "stack");
    			      run("Smooth", "stack");
    			      run("Smooth", "stack");
    				    if (numCrops <= 9) {
    					         saveAs("Tiff", cellDir+"Nom_Edges0"+numCrops+".tif");
    				    } else {
    					         saveAs("Tiff", cellDir+"Nom_Edges"+numCrops+".tif");
                }
                close();
                selectWindow("Nom_temp");
                run("Restore Selection");
                List.setMeasurements();
                x = List.getValue("X");
                y = List.getValue("Y");
        				setColor(255,255,255);
        				setFont("SansSerif" , 12, "antialiased");
        				drawString(numCrops, x, y);
        				saveAs("Tiff", cellDir + "Cell_" + numCrops + "_position.tif");
                close();
            }

            closeCroppedImages();

    				anotherCrop=getBoolean("Would you like to crop another cell in this stack?");
    			}	while (anotherCrop);

    			//selectWindow(name+"_thumb.tif");
    			//saveAs("Tiff", procDir+name+"_thumb.tif");
    			closeAllImages();
    		}

    }

    setBatchMode(false);

    // END CROP CELLS

    // CREATE AND PROCESS ROIS
    makeROIs = getBoolean("Would you like to create ROIs from the cropped cells in this directory?");

    if (makeROIs) {
        num_cells = getFileList(procDir);

        for (j = 0; j < (num_cells.length - 1) ; j++) {
            roiManager("Reset")
            curr_cell = num_cells[j];
            img = getFileList(procDir + curr_cell);
            open(procDir + curr_cell + img[1]); //GFP
            rename("GFP");
            open(procDir + curr_cell + img[6]); //RFP_Dual
            rename("RFP_Dual");
            open(procDir + curr_cell + img[4]); //Post
            rename("Post");
            open(procDir + curr_cell + img[5]); //Pre
            rename("Pre");

            selectWindow("GFP");
            run("Select None");
      			setSlice(1);
      			setAutoThreshold("Li");
      			run("Threshold...");
      			run("Create Selection");
      			resetThreshold();
            roiManager("Add");
      			count =roiManager("count");
      			roiManager("Select", count-1);
            roiManager("Rename", "wholeCell");

            selectWindow("GFP");
      			width = getWidth();
      			height = getHeight();
      			makeOval(0, 0, width, height);
      			run("Make Inverse");
      			roiManager("Add");
      			count = roiManager("count");
      			roiManager("Select", count-1);
      			roiManager("Rename", "bkgrnd");

            get_all_measurements("Pre", procDir + curr_cell, j);

            get_all_measurements("RFP_Dual", procDir + curr_cell, j);

            get_all_measurements("Post", procDir + curr_cell, j);

            closeAllImages();
    }
    // END CREATE AND PROCESS ROIS

}
}

closeAllImages();
